PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['imgs\\orange.png', 'conditions.csv', 'imgs\\box.png', 'imgs\\apple.png', 'imgs\\banana.png', 'imgs\\continue.png', 'imgs\\empty-box.png', 'imgs\\grapes.png', 'imgs\\strawberry.png', 'imgs\\watermelon.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = eightBoxes
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Routines
  Routine part1
    CodeComponent code2
      Code Type = Auto->JS
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      Begin Experiment:
        DEBUG = True

        if DEBUG:
            OBJ_DURATION = 1.0 # Seconds
            SHOW_TIMER = True
        else:
            OBJ_DURATION = 3.0 # Seconds
            SHOW_TIMER = False

        # Number of boxes
        N_BOXES = 8

        # Randomize fruits and box positions
        RANDOMIZE = False

        # Half-width of side of square (% screen height)
        BOX_HALF_WIDTH = 0.1

        # Fixed positions --------------------------------

        # Tried to put this in the conditions file,
        # but that would not work.

        # Remember it's a 0-based index
        if not RANDOMIZE:
            OBJ_POS = {
                "Practice trial": [0, 6],
                "Trial 1": [5, 3],
                "Trial 2": [0, 3, 6],
                "Trial 3": [1, 4, 6, 7],
                "Trial 4": [0, 2, 5, 6],
                "Trial 5": [0, 1, 2, 5, 7],
                "Trial 6": [0, 2, 3, 4, 5, 6],
            }

        # Auto -------------------------------------------

        BLANK_DURATION = OBJ_DURATION

        box_width = BOX_HALF_WIDTH * 2
        obj_width = box_width * 0.9

        BOX_SIZE = (box_width, box_width)
        OBJ_SIZE = (obj_width, obj_width)

        BLANK_SIZE = OBJ_SIZE

        # Boxes ------------------------------------------

        BOX_POS = (
            (-3 * BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            (    -BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            (     BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            ( 3 * BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            (-3 * BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
            (    -BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
            (     BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
            ( 3 * BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
        )

        idxs8 = []
        boxes = []
        for i in range(N_BOXES):
            idxs8.append(i)
            boxes.append(visual.ImageStim(
                win=win,
                name=f"box{i + 1}",
                image="imgs/box.png",
                pos=BOX_POS[i],
                size=BOX_SIZE,
                opacity=0.5
            ))

        highlighter = visual.ImageStim(
            win=win,
            name="highlighter",
            image="imgs/box.png",
            pos=BOX_POS[i],
            size=BOX_SIZE,
            opacity=0.5
        )

        # Objects (fruits) -------------------------------

        #IMG_PATHS = (
        #    "imgs/apple.png",
        #    "imgs/banana.png",
        #    "imgs/grapes.png",
        #    "imgs/pear.png",
        #    "imgs/strawberry.png",
        #    "imgs/watermelon.png",
        #)

        IMG_PATHS = (
            "imgs/apple.png",
            "imgs/banana.png",
            "imgs/grapes.png",
            "imgs/orange.png",
            "imgs/strawberry.png",
            "imgs/watermelon.png",
        )

        objs6 = []
        for i in range(6):
            objs6.append(visual.ImageStim(
                win=win,
                name=f"obj{i + 1}",
                image=IMG_PATHS[i],
                pos=(0, 0),
                size=OBJ_SIZE,
                opacity=1.0
            ))

        # Others -----------------------------------------

        CONT_BUTTON_SIZE = (0.32, 0.112)

        cont_button = visual.ImageStim(
            win=win,
            name="cont_button",
            image="imgs/continue.png",
            pos=(0, -0.4),
            size=(0, 0)
        )
      Begin Routine:
        # Make continue button invisible
        cont_button.setSize((0, 0), log=False)
        cont_button.setAutoDraw(False, log=False)

        # Initialize some containers
        objs = []
        visible = []
        visible_t = []
        n_omissions = []
        n_commissions = []
        for i in range(N_BOXES):
            objs.append(None)
            visible.append(False)
            visible_t.append(None)
            n_omissions.append(0)
            n_commissions.append(0)
            # Make boxes visible
            boxes[i].autoDraw = True

        # Determine positions of fruits
        if RANDOMIZE:
            shuffle(objs6)
            shuffle(idxs8)
            idxs = idxs8[:n_fruits]
        else:
            idxs = OBJ_POS[trial_name]

        idx = None
        correct_boxes = []
        for i in range(n_fruits):
            idx = idxs[i]
            objs[idx] = objs6[i]
            objs[idx].setPos(BOX_POS[idx], log=False)
            correct_boxes.append(f"box{idx + 1}")
        correct_boxes.sort()

        # Fill the rest with blanks
        for i in range(N_BOXES):
            if objs[i] is None:
                objs[i] = visual.ImageStim(
                    win=win,
                    name=f"blank{i + 1}",
                    image="imgs/empty-box.png",
                    pos=BOX_POS[i],
                    size=BLANK_SIZE
                )

        # ----

        # Other collections
        clicked_boxes = []
        click_times = []

        # Flags
        initial_reveal = True
        first_click = True
        update_time_elapsed = False
        show_continue = False
        trial_stop = False

        # Variables
        obj_count = 0
        task_time_start = None
        task_time_elapsed = 0.0
      Each Frame:
        if update_time_elapsed:
            task_time_elapsed = t - task_time_start

        if trial_stop:
            pass
        elif show_continue:
            # Make highlighter and boxes invisible
            highlighter.setSize((0, 0), log=False)
            for box in boxes:
                box.setAutoDraw(False, log=False)
            # Make continue button visible
            cont_button.setSize(CONT_BUTTON_SIZE, log=False)
            cont_button.setAutoDraw(True, log=False)
            trial_stop = True
        elif initial_reveal:
            for obj in objs:
                # Show fruits only (don't show blanks)
                if "obj" in obj.name:
                    obj.draw()
            if t > reveal_seconds:
                # Hide fruits (and blanks)
                for obj in objs:
                    obj.setAutoDraw(False, log=False)
                initial_reveal = False
        else:
            highlighter.setSize((0, 0), log=False)
            for i in range(N_BOXES):
                # Skip those currently visible
                if visible[i]:
                    continue
                if mouse2.isPressedIn(boxes[i]):
                    # Start timer on first click
                    if first_click:
                        task_time_start = t
                        update_time_elapsed = True
                        first_click = False
                    # Determine category of selection
                    if "blank" not in objs[i].name:
                        obj_count += 1
                        if obj_count >= n_fruits:
                            update_time_elapsed = False
                    elif "_blank" in objs[i].name:
                        n_commissions[i] += 1
                    else:
                        n_omissions[i] += 1
                    # Record selection
                    clicked_boxes.append(boxes[i].name)
                    click_times.append(task_time_elapsed)
                    # Make selection visible
                    objs[i].setAutoDraw(True, log=False)
                    visible[i] = True
                    visible_t[i] = t
                    break
                # On-mouseover effect
                elif boxes[i].contains(mouse2):
                    highlighter.setPos(boxes[i].pos, log=False)
                    highlighter.setSize(BOX_SIZE, log=False)
                    highlighter.draw()
                    break

        for i in range(N_BOXES):
            # Determine when to stop showing picture
            if visible[i] and t - visible_t[i] >= OBJ_DURATION:
                objs[i].setAutoDraw(False, log=False)
                if "blank" not in objs[i].name:
                    # Replace picture with blank
                    objs[i] = visual.ImageStim(
                        win=win,
                        name=f"{objs[i].name}_blank",
                        image="imgs/empty-box.png",
                        pos=BOX_POS[i],
                        size=BLANK_SIZE
                    )
                visible[i] = False

        # Determine if the trial is completed
        if obj_count >= n_fruits and sum(visible) <= 0:
            show_continue = True
      End Routine:
        thisExp.addData("clicked_boxes", clicked_boxes)
        thisExp.addData("click_times", click_times)
        thisExp.addData("time_taken_sec", click_times.pop())
        thisExp.addData("correct_boxes", correct_boxes)

        thisExp.addData("omission_errors", n_omissions)
        #thisExp.addData("double_omission_errors", double_omissions)
        thisExp.addData("commission_errors", n_commissions)

        total_errors = sum(n_omissions) + sum(n_commissions)

        thisExp.addData("total_errors", total_errors)
    TextComponent text2
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_name
      units = height
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    MouseComponent mouse2
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent debugTimer
      letterHeight = 0.01
      opacity = 0.2
      pos = (0.45, -0.45)
      saveStartStop = False
      startVal [condition] = SHOW_TIMER
      text [set every frame] = $round(task_time_elapsed, 3)
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  Routine instr
    TextComponent text1
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.98
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      text:
        Instructions:

        There will be 8 boxes on the screen. Some will contain a fruit, some will be empty (contain a red "X"). At the start of each trial, the positions of all the fruits will be revealed for a short period of time before being hidden.

        You may then click/tap on any of the boxes to show its contents. The contents will be visible for some time, during which you may not click/tap on that box again, but you may click/tap on other boxes. Selecting a box with a fruit will remove the fruit from the box, making it empty.

        Find all the fruits as fast as you can while avoiding the empty boxes. The trial will end when all the fruits are found. Whenever you are ready, click/tap on 'continue' and the next trial will begin immediately (same applies for the following trials).

        There will be 1 practice trial, followed by 6 trials.
    ImageComponent cont1
      image = imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.32, 0.112)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse1
      clickable = cont1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_name', 'Practice trial'), ('reveal_seconds', 4), ('n_fruits', 2)]),
      OrderedDict([('trial_name', 'Trial 1'), ('reveal_seconds', 3), ('n_fruits', 2)]),
      OrderedDict([('trial_name', 'Trial 2'), ('reveal_seconds', 3), ('n_fruits', 3)]),
      OrderedDict([('trial_name', 'Trial 3'), ('reveal_seconds', 3), ('n_fruits', 4)]),
      OrderedDict([('trial_name', 'Trial 4'), ('reveal_seconds', 2), ('n_fruits', 4)]),
      OrderedDict([('trial_name', 'Trial 5'), ('reveal_seconds', 2), ('n_fruits', 5)]),
      OrderedDict([('trial_name', 'Trial 6'), ('reveal_seconds', 2), ('n_fruits', 6)])]
    Routine part1
  LoopTerminator trials
